<Configuration>
    <Server
        maxThreads="10"
        port="80"/>
    <Pipeline name="ORCHESTRA_VUMC">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/ORCHESTRA/VUMC/roots/dicomImportService"
            logDuplicates="no"
            suppressDuplicates="no">

       			<!-- <accept calledAET="" />
            <accept ip="" />
            <accept callingAET="" />
            <accept calledAET="" /> -->
						
        </DicomImportService>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="roots/DirectoryImportService/import"
            name="Client Directory Import"
            quarantine="ctpData/ORCHESTRA/VUMC/quarantines/directory-import"
            root="ctpData/ORCHESTRA/VUMC/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/ORCHESTRA/VUMC/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/ORCHESTRA/VUMC/quarantines/dicom-anonymizer"
            root="ctpData/ORCHESTRA/VUMC/roots/dicom-anonymizer"
            script="ctpConfig/ORCHESTRA/VUMC/anonymizer.properties"/>
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/ORCHESTRA/VUMC/quarantines/dicom-filter"
            root="ctpData/ORCHESTRA/VUMC/roots/dicom-filter"
            script="ctpConfig/ORCHESTRA/VUMC/filter.script"/>
        <HttpExportService
            class="org.rsna.ctp.stdstages.HttpExportService"
            name="HTTP Export Service"
            quarantine="quarantines/HttpExportService"
            root="ctpData/ORCHESTRA/VUMC/roots/export-service"
            sendDigestHeader="no"
            url="https://ctp.bmia.nl:443"/>
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0010)/(0008,1030)/(0008,103E)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/ORCHESTRA/VUMC/roots/storage"
            quarantine="ctpData/ORCHESTRA/VUMC/quarantines/exportService" /> -->
    </Pipeline>
</Configuration>
